PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = test-real-time
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
    TextComponent Welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
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      text:
        Welcome to this experiment!
        Press SPACE to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent InitLSL
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo('DrumTrackMarkerStream', 'Markers', 1, 0, 'string', 'myuidw43536')

        # next make an outlet
        outlet = StreamOutlet(info)

        print("sending drum track markers...")

        outlet.push_sample(["ExptBeg"])
      End Experiment:
        outlet.push_sample(["ExptEnd"])
  Routine InstructionScreen
    TextComponent Instruction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
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      text:
        Your task is to listen to the played music and respond to the questions shown. The exact procedure is as follows.

        1. 10 seconds of silence, focus on the white cross on the screen, and relax.

        2. Listen to the music played in a relaxed state. Try not to make any body movements except natural eye blinks.

        3. Respond to the questions after each music listening trial, the answer should be according to the previously played track.

        Remember to focus on the white cross in the center of the screen at all times, and avoid head, finger, limb, and torso movements (no need to worry if you did move).

        Relax, breathe normally, clarify doubts if any, and press SPACE to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FinalScreen
    TextComponent ThankYou
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Thank You for participating in the experiment.
        The experiment will end soon.
  Routine StimulusFixation
    TextComponent PreTrialFixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = +
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    CodeComponent FixationBeginEnd
      Code Type = Py
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      Begin Routine:
        outlet.push_sample(["FixBeg-" + TrackName])
      End Routine:
        outlet.push_sample(["FixEnd-" + TrackName])
  Routine AudioAndFixation
    TextComponent DuringTrialFixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = +
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    SoundComponent DrumTrack
      sound [set every repeat] = $TrackPath
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      syncScreenRefresh = False
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    CodeComponent AudioBeginEnd
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(["AudBeg-" + TrackName])
      End Routine:
        outlet.push_sample(["AudEnd-" + TrackName])
  Routine PleasantnessRating
    TextComponent KeyboardResponse
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
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      text:
        Please enter the pleasantness
        rating of the song from 0 to 9.
    KeyboardComponent key_resp_3
      allowedKeys = '0', '1', '2', '3', '4', '5', '6', '7', '8', '9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Pleasantness_Repsonse
      Code Type = Py
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      End Routine:
        if theseKeys != []:
            for thisKey in theseKeys:
                outlet.push_sample(["Rating-"+ thisKey.name +"-"+ TrackName])
  Routine Break
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
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      text:
        Please take a 1 minute break.
        Press SPACE after the break to continue.
    KeyboardComponent break_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 60
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        if trials.thisN == 13:
            continueRoutine = True
            outlet.push_sample(["BreakBeg"])
        else:
            continueRoutine = False
Flow
  Routine WelcomeScreen
  Routine InstructionScreen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stimulus/stimuli.csv
    isTrials = False
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('Sno', 1), ('TrackPath', 'Stimulus/DummyTrack1.wav'), ('TrackName', 'DummyTrack1')]),
      OrderedDict([('Sno', 2), ('TrackPath', 'Stimulus/DummyTrack1.wav'), ('TrackName', 'DummyTrack2')]),
      OrderedDict([('Sno', 3), ('TrackPath', 'Stimulus/DummyTrack1.wav'), ('TrackName', 'DummyTrack3')])]
    Routine StimulusFixation
    Routine AudioAndFixation
    Routine PleasantnessRating
    Routine Break
  LoopTerminator trials
  Routine FinalScreen
